TestMode = 0;

// Index
//---------------------------------------------------
// Allows you to obtain the index of a Value within an Array.

  function index(a, value) {
      for (i=0; i<a.length; i++)
          if (a[i]==value) return i;
      return -1;
  }



waitForUser("Make Sure you Have a MSPEC Open");




// ROI
//---------------------------------------------------
function 	roiGetList(String1){

roiList1 = newArray();
roiLocs1 = newArray();
roiFullList1 = newArray();
nROIs1 = roiManager("count");

for(j=0; j<nROIs1; j++){
	roiManager("Select", j);
	tStr = getInfo("selection.name");
	roiFullList1 = Array.concat(roiFullList1, tStr);
	if(startsWith(tStr, String1) == true){
		roiList1 = Array.concat(roiList1, tStr);
		roiLocs1= Array.concat(roiLocs1, j);
		}
	}

return roiLocs1;
}


saveTitles = newArray("File");






StartPosition = 0;



// LISTING CONE CATCH MODELS

	modelPath = getDirectory("plugins")+"Cone Models";

	modelList=getFileList(modelPath);

	modelNames = newArray();

	for(i=0; i<modelList.length; i++){
		if(endsWith(modelList[i], ".class")==1)
			modelNames = Array.concat(modelNames,replace(modelList[i],".class",""));
		if(endsWith(modelList[i], ".CLASS")==1)
			modelNames = Array.concat(modelNames,replace(modelList[i],".CLASS",""));
	}
	
	for(i=0; i<modelNames.length; i++)
		modelNames[i] = replace(modelNames[i], "_", " ");



// LIST VISUAL SYSTEM WEBER FRACTIONS

	vsPath = getDirectory("plugins")+"micaToolbox/weberFractions";
	vsList=getFileList(vsPath);
	vsNames = newArray();
	vsNames = Array.concat("Custom", vsNames);

	for(i=0; i<vsList.length; i++){
		if(endsWith(vsList[i], ".txt")==1)
			vsNames = Array.concat(vsNames,replace(vsList[i],".txt",""));
		if(endsWith(vsList[i], ".TXT")==1)
			vsNames = Array.concat(vsNames,replace(vsList[i],".TXT",""));
	}
		
		

// LISTING LUMINANCE OPTIONS

lumChannelArray = newArray("none", "lw", "lw mw", "x", "x y");



Dialog.create("Variables");
Dialog.addChoice("cone_model",modelNames, modelNames[0]);
Dialog.addChoice("lum_channel",lumChannelArray, lumChannelArray[0]);
Dialog.addChoice("weber-system",vsNames, vsNames[0]);


Dialog.addMessage("Acuity-Settings \n ............................");
Dialog.addNumber("visual-Acuity", 13);
Dialog.addChoice("Use Acuity View?",yesNo);
Dialog.addNumber("view-distance", 500);

Dialog.addString("ROI Choices", "egg1,egg2,egg3,egg4,egg5,ClutchEx,Nest,Background,CircleN", 40);
Dialog.addString("Pre-Script, type 'None' if no scipt", "Normalise & Rois", 40);
Dialog.addString("Crop ROI, type 'None' if no scipt", "circleB", 40);
Dialog.addString("DoG ROI, type 'None' if no scipt", "circleB", 40);

Dialog.show();

		
coneMethod = Dialog.getChoice();
lumMethod  = Dialog.getChoice(); 	
webMethod  = Dialog.getChoice(); 


acuity = Dialog.getNumber();
useView = Dialog.getChoice();
distanceView = Dialog.getNumber();



ROIListStr =  Dialog.getString(); 
ROIListStr = replace(ROIListStr,", ",",");
ROIList =  split(ROIListStr,",");

Prescript = Dialog.getString();
CropROI = Dialog.getString();
DoGROI = Dialog.getString();



Dialog.create("DoG");
Dialog.addNumber("N_Octaves", 6, 1, 10,"");
Dialog.addNumber("Offset Octaves", -2, 1, 10,"");
Dialog.addNumber("ROI_Scale (mm)", 80, 5, 40,"mm");
Dialog.show();


nOctaves =  Dialog.getNumber(); 
offset =  Dialog.getNumber(); 
wlO = Dialog.getNumber();


		
coneString="model=["+coneMethod+"] desaturate desaturation=0.010 remove replace=0.001";

rois = String.join(ROIList,".");


setBatchMode(false);

// Prep Images
//===========
setPasteMode("Copy");

if(Prescript != "None"){
	run(Prescript);
}


// Make Sure all ROIs are in Image
//---------------------------------
nROI = roiManager("count");
run("Select All");
roiManager("Add");

for(i=0;i<nROI;i++){
roiManager("select", 0);
selName = getInfo("selection.name");
roiManager("select", newArray(0,nROI-i));
roiManager("AND");
roiManager("Add");
roiManager("select", roiManager("count")-1);
roiManager("rename",selName);
roiManager("select",0);
roiManager("delete");
}





// Get Scalebar Old
//-----------------------------------------------
nSelections = roiManager("count");
	scaleFlag = 0;
	for(i=0; i<nSelections; i++){
		roiManager("select", i);
		selName = getInfo("selection.name");
		if( startsWith(selName, "Scale") == 1){ // found the scale bar - extract the info
			scaleLoc = i;
			scaleFlag = 1;
			scaleInfo = split(selName, ":");
			pixLength = scaleInfo[1];
			scaleMm = scaleInfo[2];
		}	
	}//i


scaleValOld = parseFloat(pixLength)/parseFloat(scaleMm);





run("Select None");

run("Convert to Cone Catch", coneString);

if(lumMethod != "none"){
run("Create Luminance Channel", lumMethod);
wait(10);
}




if(useView=="Yes"){
AcuityString = "acuity=[Cycles per degree] acuity_0="+acuity+" method=[Viewing distance] distance="+distanceView+" rescale=5";
run("Acuity View", AcuityString);
}




// Get Scalebar New
//-----------------------------------------------


roiManager("select", scaleLoc);
getStatistics(area);

scaleVal = parseFloat(area)/parseFloat(scaleMm);


// Rescale to Set Scale
//-----------------
run("Select None");


wl =  wlO*scaleVal;

minS = Math.pow(2,(nOctaves+offset));
rescale=minS/(wl);


w = getWidth();
h = getHeight();

w= w*(rescale);
h=h*(rescale);
run("Select None");
run("Size...", "width=&w height=&h constrain average interpolation=Bilinear");

	for(i=0; i<nSelections; i++){
		roiManager("select", i);
		run("Scale... ", "x=&rescale y=&rescale");	
		roiManager("Update");
	}//i




setBatchMode("show");

rename("ConeCatch");

tStr = "visual=["+webMethod+"]";
run("Cone Catch to RNL Chromaticity",tStr );

rename("RNL");

selectImage("ConeCatch");
setSlice(nSlices);
run("Duplicate...", "title=LUM");


selectImage("RNL");


nSelections= roiManager("count");




if(CropROI != "None"){
for(i=0; i<nSelections; i++){
		roiManager("select", i);
		selName = getInfo("selection.name");
		if( startsWith(selName, CropROI ) == 1){ // found the scale bar - extract the info
		Roi.getBounds(x1, y1, width1, height1);
		run("Crop");
		run("Select None");
		selectImage("LUM");
		roiManager("select", i);
		Roi.move(x1,y1);
		run("Crop");
		roiManager("select", i);
		Roi.move(x1,y1);
		roiManager("update");
		run("Select None");
		i = nSelections;
		}	
	}//i

for(i=0; i<nSelections; i++){
		roiManager("select", i);
		Roi.getBounds(x, y, width, height);
		Roi.move(x-x1,y-y1);
		roiManager("update");
	}//i
	
}



DogROIList = roiGetList(DoGROI);

ROIindexes=newArray();

for(i=0;i<ROIList.length;i++){
temp = roiGetList(ROIList[i]);
ROIindexes=Array.concat(ROIindexes,temp);
}

if(ROIindexes.length>0){





run("Select None");

DoGArray= newArray();

//setBatchMode(true);

selectImage("LUM");
oldTitle = getTitle();
sliceTitle = getInfo("slice.label");
sliceTitle = replace(sliceTitle," ","");
if(DoGROI!="None") roiManager("select", DogROIList);
run("DoG ROI bandpass smooth", "sigma1=1 sigma2=1.6 number_of_octaves="+nOctaves+" label=BG-1");
Name = oldTitle+"_"+sliceTitle+"_DoG";
rename(Name);
DoGArray= Array.concat(DoGArray,Name);


exit


